PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'isPractice': u'no', u'session': u'001', u'participant': u'con000', u'mriMode': u'scan'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine instr
    CodeComponent instrCode
      Begin Experiment:
        win.setColor('black')

        sickPressInstr = "with your index finger"
        notsickPressInstr = "with your middle finger"

        instruction ='''Imagine that you are a health inspector trying to determine the cause of illness in different restaurants.''' \
        + ''' On each trial you will see the name of the restaurant and a particular food.''' \
        + ''' Your job is to predict whether a customer will get sick from eating the food.''' \
        + ''' The outcome may or may not depend on the particular restaurant the customer is in (you have to figure that out).''' \
        + ''' In some cases you will make predictions about the same food in different restaurants.

        The experiment consists of 9 rounds. In each round, you will make 24 predictions about a different set of restaurants and foods.''' \
        + ''' After each prediction (except the last 4), you will receive feedback about whether or not the customer got sick.

        Press %s if you believe the customer will get sick from eating the food.

        Press %s if you believe the customer will NOT get sick.

        You will have 3 seconds to press on each trial.''' % (sickPressInstr, notsickPressInstr)
    TextComponent instrText
      wrapWidth = 1.6
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        $instruction
    KeyboardComponent startExpResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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  Routine feedback
  Routine thankyou
    CodeComponent code
      Begin Experiment:
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            thankYouMsg = "You have completed the experiment. Please wait for the researcher."
        else: # not scanning => behavioral
            thankYouMsg = "You have completed the experiment. Please open the door and wait for your researcher."
    TextComponent thankYouText
      text = $thankYouMsg
      stopVal [duration (s)] = 120.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [time (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space', '1', '2'
      startVal [time (s)] = 10.0
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  Routine Fixation
    TextComponent fixationCross
      text = +
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine new_run
    CodeComponent runCode
      Begin Experiment:
        import os

        subjectFilename = os.path.join('itis', 'csv', expInfo['participant'] + '.csv')
        print 'Loading from ', subjectFilename
      Begin Routine:
        runInstr.setText("Beginning round #" + str(runs.thisN + 1))
    TextComponent runInstr
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        the text is set manually
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent trialCode
      Begin Experiment:
        import time

        # constants
        #
        sickButton = '1' # index finger
        notsickButton = '2' # middle finger

        # log wall time
        #
        expInfo['expStartWallTime'] = time.ctime()
      Begin Routine:
        # log some times
        #
        train_trials.addData('trialStartWallTime', time.ctime())
        train_trials.addData('actualChoiceOnset', fmriClock.getTime())

        #
        # ------------------ Feedback code -------------------
        #

        # clear the feedback
        #
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)

        # hack to re-render the feedback texts with new opacity
        #
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)

        #
        # ------------ Choice Highlight Code ----------------
        #

        # don't highlight the choices initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)

        # hack to re-render the highlight underscores with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)

        # track whether subject has responded so we can record response time
        # also initialize the response time by 3 (== timeout)
        # respTime is also used to terminate the relevant elements in the GUI
        # also used for feedback timing
        #
        respTime = choiceDuration # by default it's timeout

        # calculate the ITI, assuming trial will timeout.
        # we later change it to the actual ITI when the subject responds
        # note that we need to adjust for psychopy drift
        #
        timeLeftUntilItiOffset = itiOffset - fmriClock.getTime()
        actualItiDuration = timeLeftUntilItiOffset - (choiceDuration + isiDuration + feedbackDuration)
        print '   now = ', fmriClock.getTime()
        print '   itiOffset = ', itiOffset
        print '   expected iti duration = ', itiDuration
        print '   initial actual ITI duration = ', actualItiDuration
        itiDriftAdjustment = actualItiDuration - itiDuration
        print '           adjustment = ', itiDriftAdjustment
        if actualItiDuration < 0:
            actualItiDuration = 0 # worst case scenario... if we've drifted too far


        hasResponded = False
        lastReponseKey = None
      End Routine:
        # log some times
        #
        train_trials.addData('trialEndWallTime', time.ctime())
        train_trials.addData('actualItiOffset', fmriClock.getTime())
      Each Frame:
        # highlight subject's response and log the response time
        #
        if responseKey.keys and not hasResponded:
            hasResponded = True

            # only terminate early in training mode
            #
            if not isTest:
                # set respTime to terminate the relevant elements in the GUI
                #
                respTime = responseKey.rt

                # see how much time we have left for the ITI
                #
                timeLeftUntilItiOffset = itiOffset - fmriClock.getTime()
                actualItiDuration = timeLeftUntilItiOffset - (isiDuration + feedbackDuration)
                print '      final ITI = ', actualItiDuration
                itiDriftAdjustment = actualItiDuration - (choiceDuration - respTime) - itiDuration
                print '           adjustment = ', itiDriftAdjustment
                if actualItiDuration < 0:
                    actualItiDuration = 0 # worst case scenario... if we've drifted too far

            # log some stuffs
            #
            train_trials.addData('actualChoiceOffset', fmriClock.getTime())
            train_trials.addData('actualIsiOnset', fmriClock.getTime())
            train_trials.addData('responseTime', respTime)
            train_trials.addData('actualItiDuration', actualItiDuration)
            train_trials.addData('itiDriftAdjustment', itiDriftAdjustment)

            # highlight choice
            #
            if responseKey.keys == sickButton: # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == notsickButton: # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, sick or not sick'

            # save last response so we don't re-render
            # deprecated -- we only remember the last choice
            #
            lastReponseKey = responseKey.keys

            # hack to re-render the text with new opacity
            #
            sickHighlight.setText(sickHighlight.text)
            notsickHighlight.setText(notsickHighlight.text)



        # show user some feedback, and log the ISI / feedback times
        #
        if t >= respTime + isiDuration and not isFeedbackShown:
            isFeedbackShown = True
            print '      Feedback time: ', t

            # log some times
            #
            train_trials.addData('actualIsiOffset', fmriClock.getTime())
            train_trials.addData('actualFeedbackOnset', fmriClock.getTime())
            train_trials.addData('actualFeedbackOffset', fmriClock.getTime() + feedbackDuration)
            train_trials.addData('actualItiOnset', fmriClock.getTime() + feedbackDuration)

            if not responseKey.keys:
                # no response was made => timeout
                #
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else:
                # response was made => give feedback
                #
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if isSick == 'True':
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif isSick == 'False':
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    assert isTest

                # hack to redraw the texts with new opacity
                #
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
    CodeComponent streamingData
      Begin Experiment:
        # psychopy only writes the data at the very end
        # we want data with intermediate results
        # so we have this thing that dumps to a .wtf-tile
        # as the experiment is going on
        #
        streamingFilename = thisExp.dataFileName + '.wtf'
        streamingFile = open(streamingFilename, 'a')
        streamingDelim = ','

        # get names of data columns
        #
        def getExpDataNames():
            names = thisExp._getAllParamNames()
            names.extend(thisExp.dataNames)
            # names from the extraInfo dictionary
            names.extend(thisExp._getExtraInfo()[0])
            return names

        # write a header lines
        #
        def writeHeadersToStreamingFile():
            for heading in getExpDataNames():
                streamingFile.write(u'%s%s' % (heading, streamingDelim))
            streamingFile.write('\n')
            streamingFile.flush()

        def flushEntryToStreamingFile(entry):
            for name in getExpDataNames():
                entry.keys()
                if name in entry.keys():
                    ename = unicode(entry[name])
                    if ',' in ename or '\n' in ename:
                        fmt = u'"%s"%s'
                    else:
                        fmt = u'%s%s'
                    streamingFile.write(fmt % (entry[name], streamingDelim))
                else:
                    streamingFile.write(streamingDelim)
            streamingFile.write('\n')
            streamingFile.flush()

        nextEntryToFlush = 0

        # write entries that we haven't flushed yet
        # this writes both to the .wtf file and to the mysql db
        #
        def flushEntries():
            global nextEntryToFlush

            # don't write anything during the initial run
            # that's b/c the number of columns can change
            #
            if runs.thisN == 0:
                return

            # if we're after the initial run, flush everything
            # that we haven't flushed yet
            #
            while nextEntryToFlush < len(thisExp.entries):
                flushEntryToStreamingFile(thisExp.entries[nextEntryToFlush])
                nextEntryToFlush += 1
      End Routine:
        flushEntries()
    KeyboardComponent responseKey
      correctAns = $corrButton
      storeCorrect = True
      stopVal [duration (s)] = $respTime
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = '1', '2'
      startVal [time (s)] = 0
      store = first key
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    TextComponent trialInstrText
      wrapWidth = 20
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [0, 0.8]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 0.075
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    TextComponent restaurantText
      color = pink
      text [set every repeat] = $restaurant
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [0, +0.35]
      startEstim = 0
      startVal [time (s)] = 0
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [0, 0.0]
      startEstim = 0
      startVal [time (s)] = 0
      image [set every repeat] = os.path.join('foods', $food)
      size = [0.5, 0.5]
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    ImageComponent sickImg
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [-0.6, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [+0.6, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    StaticComponent ITI
      stopVal [duration (s)] = $actualItiDuration
      durationEstim = 3
      startEstim = 5
      startVal [time (s)] = $respTime + isiDuration + feedbackDuration
    TextComponent sickHighlight
      text = _
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [-0.6, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1.0
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    TextComponent notsickHighlight
      text = _
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 5
      pos = [0.6, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent correctText
      color = blue
      text = CORRECT
      stopVal [duration (s)] = $feedbackDuration
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent wrongText
      color = red
      text = WRONG
      stopVal [duration (s)] = $feedbackDuration
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent timeoutText
      color = red
      text = TIMEOUT
      stopVal [duration (s)] = $feedbackDuration
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent gotSickText
      text = The customer got sick!
      stopVal [duration (s)] = $feedbackDuration
      durationEstim = 1
      pos = [0, -0.55]
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration
      letterHeight = 0.075
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    TextComponent didntGetSickText
      text = The customer didn't get sick!
      stopVal [duration (s)] = $feedbackDuration
      durationEstim = 1
      pos = [0, -0.55]
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration
      letterHeight = 0.075
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    StaticComponent ISI
      stopVal [duration (s)] = $isiDuration
      durationEstim = 1
      startEstim = 3
      startVal [time (s)] = $respTime
    TextComponent fixationITIText
      text = +
      stopVal [duration (s)] = $actualItiDuration
      durationEstim = 3
      startEstim = 5
      startVal [time (s)] = $respTime + isiDuration + feedbackDuration
      letterHeight = 0.1
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  Routine test_2
    CodeComponent timeLoggingCode_2
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
    CodeComponent showFeedback_2
      Begin Routine:
        # invalid
        """
        # clear the feedback
        isFeedbackShown_2 = False
        timeoutText_2.setOpacity(0)
        # hack to re-render the texts with new opacity
        timeoutText_2.setText(timeoutText_2.text)
        """
      Each Frame:
        #invalid
        """
        # show user some feedback ONLY if timeout
        # otherwise we don't show feedback on test trials
        #
        if t >= 5 + itiTime_2 and not isFeedbackShown_2: # TODO don't hardcode
            isFeedbackShown_2 = True
            if not responseKey_2.keys: # no response was made
                timeoutText_2.setOpacity(1)
                timeoutText_2.setText(timeoutText_2.text)
            else: # response was made
                continueRoutine = False
        """
    CodeComponent choiceAndOffsetsCode_2
      Begin Routine:
        addFmriClockData('choiceOnset')
        addFmriClockData('isiOffset', 6) # TODO FIXME hardcoded trial duration
        addFmriClockData('itiOnset', 6) # TODO FIXME hardcoded trial duration

        # don't highlight anything initially
        #
        sickHighlight_2.setOpacity(0)
        notsickHighlight_2.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
        # save the last response so we don't re-render the _
        lastReponseKey_2 = None

        hasResponded_2 = False
      End Routine:
        addFmriClockData('itiOffset')
      Each Frame:
        # highlight subject's response
        #
        if responseKey_2.keys and not hasResponded_2:
            hasResponded_2 = True

            # do the timing first
            #
            respTime_2 = responseKey_2.rt

            print '        TEST Response highlight at ', t # t is a little slower than responseKey.rt
            addFmriClockData('choiceOffset')
            addFmriClockData('isiOnset')

            # highlight choice
            #
            if responseKey_2.keys == sickButton: # sick
                sickHighlight_2.opacity = 1
                notsickHighlight_2.opacity = 0
            elif responseKey_2.keys == notsickButton: # not sick
                sickHighlight_2.opacity = 0
                notsickHighlight_2.opacity = 1
            else:
                assert False, 'Can only have one response, sick or not sick'
            # save the last response so we don't re-render the _
            lastReponseKey_2 = responseKey_2.keys
            # hack to re-render the text with new opacity
            sickHighlight_2.setText(sickHighlight_2.text)
            notsickHighlight_2.setText(notsickHighlight_2.text)
    CodeComponent jitterAndStimsCode_2
      Begin Routine:
        if expInfo['mriMode'] != 'off': # we're scanning
            assert expInfo['mriMode'] == 'scan'

            # Note that here we override the cueId and the contextId
            #
            itiTime_2 = fMRI_run_itis[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]
            cueId = fMRI_run_cueIds[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]
            contextId = fMRI_run_contextIds[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]

            print '(fMRI test) iti time = ', itiTime_2, ' cueId = ', cueId, ' contextId = ', contextId
            thisExp.addData('itiTime', itiTime_2)

        else:  # behavioral
            print '(test) next iti idx = ', nextItiIdx

            assert nextItiIdx == runs.thisN * nTrialsPerRun + nTrainTrialsPerRun + test_trials.thisN, \
                str(nextItiIdx) + " == " + str(runs.thisN) + " * " + str(nTrialsPerRun) + " + " + str(nTrainTrialsPerRun) + " + " + str(test_trials.thisN)

            itiTime_2 = allItis[nextItiIdx]
            nextItiIdx += 1

            print '(test) iti time = ', itiTime_2
            thisExp.addData('itiTime', itiTime_2)

            assert itiTime_2 == runItisSanity[runs.thisN][nTrainTrialsPerRun + test_trials.thisN], \
                str(itiTime_2) + " == runItisSanity[" + str(runs.thisN) + "][" + str(nTrainTrialsPerRun) + " + " + str(test_trials.thisN) + "] = " + runItisSanity[runs.thisN][nTrainTrialsPerRun + test_trials.thisN]
            assert itiTime_2 >= itiMin
            assert itiTime_2 <= itiMax
    CodeComponent streamingData_2
      End Routine:
        flushEntries()
    CodeComponent addExtraDataCodeLAST_2
      Begin Routine:
        thisExp.addData('trialOrTest', 'test')

        # MUST BE LAST -> b/c we change e.g. the cueId above
        #
        addExtraData()
    StaticComponent ITI_2
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      startVal [time (s)] = 6
    KeyboardComponent responseKey_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 6
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = 'left','right', '1', '2'
      startVal [time (s)] = 0
      store = first key
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    TextComponent trialInstrText_2
      wrapWidth = 20
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = 6.0
      pos = [0, 0.8]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 0.075
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    TextComponent restaurantText_2
      color = pink
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      stopVal [duration (s)] = 6
      pos = [0, +0.35]
      startEstim = 0
      startVal [time (s)] = 0
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg_2
      stopVal [duration (s)] = 6.0
      pos = [0, 0.0]
      startEstim = 0
      startVal [time (s)] = 0
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    ImageComponent sickImg_2
      stopVal [duration (s)] = 6.0
      pos = [-0.6, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg_2
      stopVal [duration (s)] = 6
      pos = [+0.6, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent sickHighlight_2
      text = _
      stopVal [duration (s)] = 6
      pos = [-0.6, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1.0
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    TextComponent notsickHighlight_2
      text = _
      stopVal [duration (s)] = 6
      pos = [0.6, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent fixationJitterText_2
      text = +
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      startVal [time (s)] = 6
      letterHeight = 0.1
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  Routine waitForTrigger
    CodeComponent waitForTriggerCode
      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner
        # definitely log it!

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan

            # settings for launchScan:
            MR_settings = {
                'TR': 2.5, # duration (sec) per volume
                'volumes': 141, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Begin Routine:
        if expInfo['mriMode'] != 'off': # or 'scan' !
            assert expInfo['mriMode'] == 'scan'

            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock, # <-- how you know the time!
                      mode=expInfo['mriMode']) # <-- mode passed in
            elif trigger == 'parallel':
                parallel.setPortAddress(0x378)
                pin = 10; wait_msg = "Waiting for scanner..."
                pinStatus = parallel.readPin(pin)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
                       break
                       # start exp when pin values change
                globalClock.reset()
                logging.defaultClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received
        else:
            fmriClock.reset()

        expInfo['triggerWallTime'] = time.ctime()
        core.wait(1)
      End Routine:
        routineTimer.reset()
  Routine test
  Routine end_run
    CodeComponent setEndRunInfo
      Begin Routine:
        endRunInfo.setText("End of round #" + str(runs.thisN + 1))
    TextComponent endRunInfo
      wrapWidth = 1.5
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        the text is set manually
  Routine waitForFinish
    CodeComponent finishCode
      Begin Experiment:
        EXP_DURATION = 352.5
      End Routine:
        logging.exp("Experiment Finished")
      End Experiment:
        #win.saveMovieFrames('thumb.png')
      Each Frame:
        if logging.defaultClock.getTime() > EXP_DURATION:
            continueRoutine = False
            finishText.status = FINISHED
            finishText.setAutoDraw(False)
    TextComponent finishText
      color = black
      text = Please wait for scanner to finish...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine test_warning
    TextComponent testTrialsHeadsUp
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Beginning test phase.

        You will not receive feedback on the following 4 trials.
  Routine Fixation_2
    TextComponent fixationCross_2
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = $subjectFilename
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine new_run
    Routine waitForTrigger
    Routine Fixation
    LoopInitiator train_trials loopType="TrialHandler"
      conditionsFile = $runFilename
      loopType = sequential
      nReps = 1
      Selected rows = range(0, 20)
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      Routine trial
    LoopTerminator train_trials
    Routine test_warning
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $runFilename
      loopType = sequential
      nReps = 1
      Selected rows = range(20, 24)
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      Routine trial
    LoopTerminator test_trials
    Routine Fixation_2
  LoopTerminator runs
  Routine waitForFinish
  Routine thankyou
