PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'isPractice': u'no', u'session': u'001', u'participant': u'con000', u'mriMode': u'scan'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine instr
    CodeComponent initStuff
      Begin Experiment:
        win.setColor('black')
    CodeComponent instrCode
      Begin Experiment:
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            sickPressInstr = "with your index finger"
            notsickPressInstr = "with your middle finger"
        else: # not scanning => behavioral
            sickPressInstr = "the left arrow key (<-)"
            notsickPressInstr = "the right arrow key (->)"


        instruction ='''Imagine that you are a health inspector trying to determine the cause of illness in different restaurants.''' \
        + ''' On each trial you will see the name of the restaurant and a particular food.''' \
        + ''' Your job is to predict whether a customer will get sick from eating the food.''' \
        + ''' The outcome may or may not depend on the particular restaurant the customer is in (you have to figure that out).''' \
        + ''' In some cases you will make predictions about the same food in different restaurants.

        The experiment consists of 9 rounds. In each round, you will make 24 predictions about a different set of restaurants and foods.''' \
        + ''' After each prediction (except the last 4), you will receive feedback about whether or not the customer got sick.

        Press %s if you believe the customer will get sick from eating the food.

        Press %s if you believe the customer will NOT get sick.

        You will have 3 seconds to press on each trial.

        Press any button to begin the first round.''' % (sickPressInstr, notsickPressInstr)
    TextComponent instrText
      wrapWidth = 1.6
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        $instruction
    KeyboardComponent startExpResp
      stopVal [time (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space', '1', '2'
      startVal [time (s)] = 1
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  Routine feedback
  Routine thankyou
    CodeComponent code
      Begin Experiment:
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            thankYouMsg = "You have completed the experiment. Please wait for the researcher."
        else: # not scanning => behavioral
            thankYouMsg = "You have completed the experiment. Please open the door and wait for your researcher."
    TextComponent thankYouText
      text = $thankYouMsg
      stopVal [duration (s)] = 120.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [time (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space', '1', '2'
      startVal [time (s)] = 10.0
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  Routine Fixation
    TextComponent fixationCross
      text = +
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine new_run
    CodeComponent setRunInstr
      Begin Routine:
        runInstr.setText("Beginning round #" + str(runs.thisN + 1))
    CodeComponent getRestaurants
      Begin Routine:
        # Parse the comma-separated list of restaurant names
        #
        restaurants = [r.strip() for r in restaurantNames.split(',')]
        assert len(restaurants) == 3, "There should be 3 comma-separated restaurant names per run; found " + str(len(restaurants))

        # Use a separate, hardcoded set of restaurants and foods if it's just a practice run
        #
        if expInfo['isPractice'] == 'yes':
            restaurants = ['Seven Hills', 'Blue Bottle Cafe', 'Restaurant Gary Danko']
            foodFilesPrefix = 'practice_food'
    CodeComponent shuffleContextRoles
      Begin Routine:
        # Random shuffle the context roles so they're independent from the
        # restaurants / foods.
        #
        # Notice that we ONLY DO THIS ONCE at the beginning
        #
        try:
            assert contextRolesWereShuffled
        except NameError:
            # hack to make sure this happens only once
            # we can't put in Begin Experiment b/c runs is not initialized there
            #
            contextRoles = [run['contextRole'] for run in runs.trialList]
            print 'original contextRoles = ', contextRoles
            # do a psychopy random (NOT fullRandom) shuffle --
            # put contexts in 3 groups (each with all 3 context roles)
            # and shuffle each group separately,
            # e.g. b c a  b a c  a c b
            #
            assert len(contextRoles) % 3 == 0
            shuffledContextRoles = []
            for i in range(3):
                bunch = contextRoles[i * 3 : (i + 1) * 3]
                assert len(bunch) == 3
                assert len(set(bunch)) == 3
                shuffle(bunch)
                shuffledContextRoles.extend(bunch)
            contextRoles = shuffledContextRoles
            print 'Shuffled context roles = ', contextRoles
            # set the flag so we don't run this code again
            #
            contextRolesWereShuffled = True

        # very important to set it here so
        # 1) it gets used to initialize the trial loop, and
        # 2) it gets written out to the data file
        #
        thisRun.contextRole = contextRoles[runs.thisN]
        contextRole = contextRoles[runs.thisN] # ..................
    CodeComponent shuffleFoodsAndRestaurants
      Begin Experiment:
        import os
        import csv

        # TODO FIXME this is hardcoded & duplicated with the trials, test_trials & runs loop
        #
        nRuns = 9
        nTrainTrialsPerRun = 20
        # in practice mode, only run 1 rep (4 trials)
        # also see End Routine
        # ... BUT NOT REALLY any more => gotta get the real deal in the fMRI practice
        #if expInfo['isPractice'] == 'yes':
        #    nTrainTrialsPerRun = 4
        nTestTrialsPerRun = 4

        nTrialsPerRun = nTrainTrialsPerRun + nTestTrialsPerRun;
        nTotalTrials = nRuns * nTrialsPerRun

        # TODO these are hardcoded!
        trainTrialFixedTime = 5 # stim presentation + ISI + feedback
        testTrialFixedTime = 6 # stim presentation


        # OKAY some serious hacksauce follows.
        #
        # In fMRI mode, we pre-generate the ITI's and the stim sequences (x1c2, x2c1, x1c1, x2c1, etc)
        # for each run for each subject. We do this with optseq2 which ensures the
        # spacing of ITI's makes sense. So in fMRI mode, instead of using the
        # randomly generated stim sequence by psychopy (see "trials" and "test_trials" loops),
        # we take the pre-generated one from optseq2.
        #
        # The reason I didn't just put the .csv file as the conditions file of the trials/test_trials loops
        # is that I wanted to have it be backwards-compatible, and so that
        # if we want to mess around or do a behavioral run, we don't have to
        # go back and pre-generate all that crap with optseq.
        #
        # NOTE that this assumes the file format is pre-determined and that the partipant ID
        # has the form conPXXX, and that the corresponding file exists.
        #
        # Also note that the whole trial / run sequence is hardcoded in here
        # particularly the duration of the different times -- sorry that's just
        # the way things are.
        #
        # Also note that as an extra precaution to not accidentally use the same set of ITI's twice
        # (which would cost us $2000, give or take), we rename each file after using it.
        #

        if expInfo['mriMode'] != 'off':
            assert expInfo['mriMode'] == 'scan'

            fMRI_run_itis = [[]] * nRuns
            fMRI_run_itiOffsets = [[]] * nRuns
            fMRI_run_cueIds = [[]] * nRuns
            fMRI_run_contextIds = [[]] * nRuns

            # pre-load all the runs, so if something's fucked we know before we start scanning
            #
            for run_idx in range(nRuns):
                itis_file = os.path.join('itis', 'csv', '%s_run%d_itis.csv' % (expInfo['participant'], run_idx))
                print 'Using ITIs file ', itis_file
                t = 10 # TODO hardcoded initial fixation time
                with open(itis_file, 'r') as f:
                    reader = csv.reader(f, delimiter=',')
                    next(reader) # skip the headers
                    sanity_trial_n = 0
                    for row in reader:
                        print row
                        assert row[0] == str(sanity_trial_n), "Wrong entry on line " + str(sanity_trial_n) + "; got " + row[0]
                        fMRI_run_itis[run_idx].append(float(row[1]))
                        if sanity_trial_n < 20: # TODO hardcoded last train trial id (0-based)
                            t += 5 # TODO hardcoded train trial time
                        else:
                            t += 6 # TODO hardcoded test trial time
                        t += float(row[1]) # the ITI
                        if sanity_trial_n == 19: # TODO hardcoded after last training trial
                            t += 4 # TODO hardcoded "test_warning" duration
                        fMRI_run_itiOffsets[run_idx].append(t)
                        fMRI_run_cueIds[run_idx].append(int(row[2]))
                        fMRI_run_contextIds[run_idx].append(int(row[3]))
                        sanity_trial_n += 1
                    assert sanity_trial_n == nTrialsPerRun, "Should have exactly 24 trials in the ITIs file"
                    assert fMRI_run_itiOffsets[run_idx][-1] == 214, "Last ITI offset should be 214; instead it's " + str(fMRI_run_itiOffsets[run_idx][-1])

                # TODO reenable before start!
                #os.rename(itis_file, itis_file + '_USED') # so we don't accidentally use them twice. That would be a disaster
      Begin Routine:
        # randomize mapping between cues & contexts <--> foods & restaurants
        # within each run
        # note that we DO THIS BEFORE EVERY RUN
        # also note that this is separate from randomizing the order of the
        # cue-context pairs. This is just the x_i -> image , c_i -> restaurant mapping
        #
        cuesReshuffled = range(0, 3)
        contextsReshuffled = range(0, 3)

        shuffle(cuesReshuffled)
        shuffle(contextsReshuffled)

        print 'Shuffled cues: ', cuesReshuffled
        print 'Shuffled contexts: ', contextsReshuffled
    CodeComponent runIsPractice
      End Routine:
        # in practice mode, only run 1 round
        #
        if expInfo['isPractice'] == 'yes':
            runs.finished = True
    TextComponent runInstr
      wrapWidth = 1.5
      stopVal [duration (s)] = 100.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        the text is set manually
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent timeLoggingCode
      Begin Experiment:
        import time
        expInfo['expStartWallTime'] = time.ctime()
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
    CodeComponent showFeedback
      Begin Routine:
        # clear the feedback
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)
        # hack to re-render the texts with new opacity
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)
      Each Frame:
        # show user some feedback, and log the ISI / feedback times
        # TODO FIXME stuff is hardcoded here
        #
        if t >= respTime + 1 and not isFeedbackShown: # TODO ISI time (1) is hardcoded
            isFeedbackShown = True
            print '      Feedback time: ', t
            addFmriClockData('isiOffset')
            addFmriClockData('feedbackOnset')
            addFmriClockData('feedbackOffset', 1) # TODO feedback time (1) is hardcoded
            addFmriClockData('itiOnset', 1) # TODO same

            if not responseKey.keys: # no response was made
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else: # response was made
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if sick == 'Yes':
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif sick == 'No':
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    print sick
                    assert False, "sick can only be Yes or No"

                # hack to redraw the texts with new opacity
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
    CodeComponent choiceAndOffsetsCode
      Begin Experiment:
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            sickButton = '1' # index finger
            notsickButton = '2' # middle finger
        else: # not scanning => behavioral
            sickButton = 'left'
            notsickButton = 'right'
      Begin Routine:
        addFmriClockData('choiceOnset')

        # in fMRI mode, remap the correct ans 'left' => 1, 'right' => 2
        # this is crucial to give correct feedback!
        #
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            if corrAns == 'left':
                corrAns = '1'
            elif corrAns == 'right':
                corrAns = '2'

        # don't highlight anything initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
        # save the last response key so we don't re-render the _
        #
        lastReponseKey = None

        # track whether subject has responded so we can record response time
        # also initialize the response time by 3 (== timeout)
        #
        maxRespTime = 3
        respTime = maxRespTime # by default it's timeout
        hasResponded = False
      End Routine:
        addFmriClockData('itiOffset')
      Each Frame:
        # highlight subject's response and log the response time
        #
        if responseKey.keys and not hasResponded:
            hasResponded = True

            # do the timing first
            # at this point, we are starting the ISI
            # => we have 1 second of ISI and 1 second of feedback before the ITI
            #
            # TODO more hardcoded crap...
            #

            # this code is deprecated; included for sanity check
            respTime = responseKey.rt
            residual = maxRespTime - respTime
            itiTime += residual
            print '        train response highlight: ', t
            print '           residual = ', residual
            print '           new ITI = ', itiTime

            # this is the real deal
            timeLeftUntilItiOffset = itiOffset - fmriClock.getTime()
            finalItiTime = timeLeftUntilItiOffset - 2 # less the ISI and the feedback TODO hardcoded
            print '           final ITI = ', finalItiTime
            itiDriftAdjustment = finalItiTime - itiTime
            print '           adjustment = ', itiDriftAdjustment
            if finalItiTime < 0:
                finalItiTime = 0 # worst case scenario... if we've drifted too far
            itiTime = finalItiTime # very important to set itiTime -- this is the one that's used in the GUI for the duration of the ITI segment

            addFmriClockData('choiceOffset')
            addFmriClockData('isiOnset')
            thisExp.addData('responseTime', respTime)
            thisExp.addData('residualTime', residual)
            thisExp.addData('newItiTime', itiTime)
            thisExp.addData('estimatedItiOffset', itiOffset)
            thisExp.addData('itiDriftAdjustment', itiDriftAdjustment)

            # then highlight choice
            #
            if responseKey.keys == sickButton: # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == notsickButton: # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, sick or not sick'
            # save last response so we don't re-render
            lastReponseKey = responseKey.keys
            # hack to re-render the text with new opacity
            sickHighlight.setText(sickHighlight.text)
            notsickHighlight.setText(notsickHighlight.text)
    CodeComponent jitterAndStimsCode
      Begin Experiment:
        # different jitter distributions depending on mode
        #

        if expInfo['mriMode'] != 'off': # we're scanning
            assert expInfo['mriMode'] == 'scan'

            #
            # .... here we have pre-generated the ITI's using optseq2 and pulled them
            # from a separate file for the current run.
            # So no need to pre-generate anything here.
            #

        else: # behavioral
            #
            #  ..... here we pre-generate the ITI's in the code
            #

            itiMean = 1.5
            itiLambda = 0.5
            itiMin = 1
            itiMax = 4
            maxAllowedRunTime = 3 * 60 # max 3 mins per run in behavioral

            # Generate the ITI's
            # TODO the times are hardcoded & duplicated with the ones in the builder
            #
            runOverheadTime = 10 # info screens

            # For each run, generate the ITI's from a laplacian
            # and make sure that they fit in the max allowed run time
            # for each run, keep trying until we find a sequence of ITIs
            # that do fit; otherwise if we fail after a lot of attempts,
            # just take the shorted ITI sequence
            #
            allItis = []
            runItisSanity = [] # for sanity check
            for r in range(nRuns):
                bestItis = None
                print 'run = ', r
                for attempt in range(1, 100):
                    itis = np.random.laplace(itiMean, itiLambda, nTrialsPerRun)
                    itis = np.clip(itis, itiMin, itiMax)
                    print '  attempt ', attempt, ' = ', sum(itis)
                    if not bestItis or sum(itis) < sum(bestItis):
                        bestItis = itis
                    totalRunTime = sum(itis) + nTrainTrialsPerRun * trainTrialFixedTime + nTestTrialsPerRun * testTrialFixedTime + runOverheadTime
                    print '                total run time = ', totalRunTime, ' vs. ', maxAllowedRunTime
                    if totalRunTime < maxAllowedRunTime:
                        break
                bestItis = list(bestItis)
                allItis.extend(bestItis) # add ITI's for this run to the list
                runItisSanity.append(bestItis) # for sanity

            nextItiIdx = 0
            assert len(allItis) == nTotalTrials
      Begin Routine:
        respTime = 3 # TODO FIXME hardcoded -- this is the default

        if expInfo['mriMode'] != 'off': # we're scanning
            assert expInfo['mriMode'] == 'scan'

            # Note that here we override the cueId and the contextId
            #
            itiTime = fMRI_run_itis[runs.thisN][trials.thisN]
            itiOffset = fMRI_run_itiOffsets[runs.thisN][trials.thisN]
            cueId = fMRI_run_cueIds[runs.thisN][trials.thisN]
            contextId = fMRI_run_contextIds[runs.thisN][trials.thisN]

            # .......................
            #
            if contextRole == 'irrelevant':
                if cueId == 0:
                    sick = 'Yes'
                    corrAns = sickButton
                else:
                    sick = 'No'
                    corrAns = notsickButton

            elif contextRole == 'modulatory':
                if cueId == contextId:
                    sick = 'Yes'
                    corrAns = sickButton
                else:
                    sick = 'No'
                    corrAns = notsickButton
            else:
                assert contextRole == 'additive'
                if contextId == 0:
                    sick = 'Yes'
                    corrAns = sickButton
                else:
                    sick = 'No'
                    corrAns = notsickButton

            print 'WHAT THE FUCK ', thisRun.contextRole
            print 'laksdjfhk;asdfjaksdjfh ', contextRole

            print '(fMRI train) iti time = ', itiTime, ' itiOffset = ', itiOffset, ' cueId = ', cueId, ' contextId = ', contextId
            thisExp.addData('itiTime', itiTime)

        else: # behavioral => different codepath

            print '(train) next iti idx = ', nextItiIdx

            assert nextItiIdx == runs.thisN * nTrialsPerRun + trials.thisN, \
                str(nextItiIdx) + " == " + str(runs.thisN) + " * " + str(nTrialsPerRun) + " + " + str(trials.thisN)

            itiTime = allItis[nextItiIdx]
            nextItiIdx += 1

            print '(train) iti time = ', itiTime
            thisExp.addData('itiTime', itiTime)

            #print runs.thisN
            #print trials.thisN
            #print len(runItisSanity)
            #print len(runItisSanity[runs.thisN])

            assert itiTime == runItisSanity[runs.thisN][trials.thisN], \
                str(itiTime) + " == runItisSanity[" + str(runs.thisN) + "][" + str(trials.thisN) + "] = " + runItisSanity[runs.thisN][trials.thisN]
            assert itiTime >= itiMin
            assert itiTime <= itiMax
      End Routine:
        # in practice mode, only run 1 rep (4 trials)
        # ... NOT in the fMRI practice rounds => make sure they get it with a full run
        #
        #if expInfo['isPractice'] == 'yes' and trials.thisN >= 3:
        #    trials.finished = True
    CodeComponent streamingData
      Begin Experiment:
        # psychopy only writes the data at the very end
        # we want data with intermediate results
        # so we have this thing that dumps to a .wtf-tile
        # as the experiment is going on
        #
        streamingFilename = thisExp.dataFileName + '.wtf'
        streamingFile = open(streamingFilename, 'a')
        streamingDelim = ','

        # get names of data columns
        #
        def getExpDataNames():
            names = thisExp._getAllParamNames()
            names.extend(thisExp.dataNames)
            # names from the extraInfo dictionary
            names.extend(thisExp._getExtraInfo()[0])
            return names

        # write a header lines
        #
        def writeHeadersToStreamingFile():
            for heading in getExpDataNames():
                streamingFile.write(u'%s%s' % (heading, streamingDelim))
            streamingFile.write('\n')
            streamingFile.flush()

        def flushEntryToStreamingFile(entry):
            for name in getExpDataNames():
                entry.keys()
                if name in entry.keys():
                    ename = unicode(entry[name])
                    if ',' in ename or '\n' in ename:
                        fmt = u'"%s"%s'
                    else:
                        fmt = u'%s%s'
                    streamingFile.write(fmt % (entry[name], streamingDelim))
                else:
                    streamingFile.write(streamingDelim)
            streamingFile.write('\n')
            streamingFile.flush()

        nextEntryToFlush = 0

        # write entries that we haven't flushed yet
        # this writes both to the .wtf file and to the mysql db
        #
        def flushEntries():
            global nextEntryToFlush

            # don't write anything during the initial run
            # that's b/c the number of columns can change
            #
            if runs.thisN == 0:
                return

            # if we're after the initial run, flush everything
            # that we haven't flushed yet
            #
            while nextEntryToFlush < len(thisExp.entries):
                flushEntryToStreamingFile(thisExp.entries[nextEntryToFlush])
                nextEntryToFlush += 1
      End Routine:
        flushEntries()
    CodeComponent sanityChecks
      Begin Routine:
        assert contextRolesWereShuffled
    CodeComponent addExtraDataCodeLAST
      Begin Experiment:
        def addFmriClockData(column = 'fmriTime', add = 0): # for tracking different events
            thisExp.addData(column, fmriClock.getTime() + add)

        def addExtraData(): # extra info we want to record on every train/test trial
            thisExp.addData('contextsReshuffled', ','.join([str(x) for x in contextsReshuffled]))
            thisExp.addData('contextIdReal', contextId)
            thisExp.addData('restaurant', restaurants[contextsReshuffled[contextId]])
            thisExp.addData('cuesReshuffled', ','.join([str(x) for x in cuesReshuffled]))
            thisExp.addData('cueIdReal', cueId)
            thisExp.addData('food', foodFilesPrefix + str(cuesReshuffled[cueId]))
            thisExp.addData('contextRoleReal', contextRole)
            thisExp.addData('corrAnsReal', corrAns)
            thisExp.addData('sickReal', sick)
      Begin Routine:
        thisExp.addData('trialOrTest', 'trial')

        # MUST BE LAST! b/c we change the cueId and contextId above
        addExtraData()
    KeyboardComponent responseKey
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = $respTime
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = 'left','right', '1', '2'
      startVal [time (s)] = 0
      store = first key
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    TextComponent trialInstrText
      wrapWidth = 20
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [0, 0.8]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 0.075
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    TextComponent restaurantText
      color = pink
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [0, +0.35]
      startEstim = 0
      startVal [time (s)] = 0
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [0, 0.0]
      startEstim = 0
      startVal [time (s)] = 0
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    ImageComponent sickImg
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [-0.5, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [+0.5, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    StaticComponent ITI
      stopVal [duration (s)] = $itiTime
      durationEstim = 3
      startEstim = 5
      startVal [time (s)] = $respTime + 2
    TextComponent sickHighlight
      text = _
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [-0.5, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1.0
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    TextComponent notsickHighlight
      text = _
      stopVal [duration (s)] = $respTime + 2
      durationEstim = 5
      pos = [0.5, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent correctText
      color = blue
      text = CORRECT
      stopVal [duration (s)] = 1
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = respTime + 1
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent wrongText
      color = red
      text = WRONG
      stopVal [duration (s)] = 1
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = respTime + 1
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent timeoutText
      color = red
      text = TIMEOUT
      stopVal [duration (s)] = 1.0
      durationEstim = 1
      pos = [0, -0.4]
      startEstim = 4
      startVal [time (s)] = respTime + 1
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent gotSickText
      text = The customer got sick!
      stopVal [duration (s)] = 1.0
      durationEstim = 1
      pos = [0, -0.55]
      startEstim = 4
      startVal [time (s)] = respTime + 1
      letterHeight = 0.075
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    TextComponent didntGetSickText
      text = The customer didn't get sick!
      stopVal [duration (s)] = 1.0
      durationEstim = 1
      pos = [0, -0.55]
      startEstim = 4
      startVal [time (s)] = $respTime + 1
      letterHeight = 0.075
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    StaticComponent ISI
      stopVal [duration (s)] = 1
      startEstim = 3
      startVal [time (s)] = $respTime
    TextComponent fixationITIText
      text = +
      stopVal [duration (s)] = $itiTime
      durationEstim = 3
      startEstim = 5
      startVal [time (s)] = $respTime + 2
      letterHeight = 0.1
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  Routine test_2
    CodeComponent timeLoggingCode_2
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
    CodeComponent showFeedback_2
      Begin Routine:
        # invalid
        """
        # clear the feedback
        isFeedbackShown_2 = False
        timeoutText_2.setOpacity(0)
        # hack to re-render the texts with new opacity
        timeoutText_2.setText(timeoutText_2.text)
        """
      Each Frame:
        #invalid
        """
        # show user some feedback ONLY if timeout
        # otherwise we don't show feedback on test trials
        #
        if t >= 5 + itiTime_2 and not isFeedbackShown_2: # TODO don't hardcode
            isFeedbackShown_2 = True
            if not responseKey_2.keys: # no response was made
                timeoutText_2.setOpacity(1)
                timeoutText_2.setText(timeoutText_2.text)
            else: # response was made
                continueRoutine = False
        """
    CodeComponent choiceAndOffsetsCode_2
      Begin Routine:
        addFmriClockData('choiceOnset')
        addFmriClockData('isiOffset', 6) # TODO FIXME hardcoded trial duration
        addFmriClockData('itiOnset', 6) # TODO FIXME hardcoded trial duration

        # don't highlight anything initially
        #
        sickHighlight_2.setOpacity(0)
        notsickHighlight_2.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
        # save the last response so we don't re-render the _
        lastReponseKey_2 = None

        hasResponded_2 = False
      End Routine:
        addFmriClockData('itiOffset')
      Each Frame:
        # highlight subject's response
        #
        if responseKey_2.keys and not hasResponded_2:
            hasResponded_2 = True

            # do the timing first
            #
            respTime_2 = responseKey_2.rt

            print '        TEST Response highlight at ', t # t is a little slower than responseKey.rt
            addFmriClockData('choiceOffset')
            addFmriClockData('isiOnset')

            # highlight choice
            #
            if responseKey_2.keys == sickButton: # sick
                sickHighlight_2.opacity = 1
                notsickHighlight_2.opacity = 0
            elif responseKey_2.keys == notsickButton: # not sick
                sickHighlight_2.opacity = 0
                notsickHighlight_2.opacity = 1
            else:
                assert False, 'Can only have one response, sick or not sick'
            # save the last response so we don't re-render the _
            lastReponseKey_2 = responseKey_2.keys
            # hack to re-render the text with new opacity
            sickHighlight_2.setText(sickHighlight_2.text)
            notsickHighlight_2.setText(notsickHighlight_2.text)
    CodeComponent jitterAndStimsCode_2
      Begin Routine:
        if expInfo['mriMode'] != 'off': # we're scanning
            assert expInfo['mriMode'] == 'scan'

            # Note that here we override the cueId and the contextId
            #
            itiTime_2 = fMRI_run_itis[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]
            cueId = fMRI_run_cueIds[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]
            contextId = fMRI_run_contextIds[runs.thisN][test_trials.thisN + nTrainTrialsPerRun]

            print '(fMRI test) iti time = ', itiTime_2, ' cueId = ', cueId, ' contextId = ', contextId
            thisExp.addData('itiTime', itiTime_2)

        else:  # behavioral
            print '(test) next iti idx = ', nextItiIdx

            assert nextItiIdx == runs.thisN * nTrialsPerRun + nTrainTrialsPerRun + test_trials.thisN, \
                str(nextItiIdx) + " == " + str(runs.thisN) + " * " + str(nTrialsPerRun) + " + " + str(nTrainTrialsPerRun) + " + " + str(test_trials.thisN)

            itiTime_2 = allItis[nextItiIdx]
            nextItiIdx += 1

            print '(test) iti time = ', itiTime_2
            thisExp.addData('itiTime', itiTime_2)

            assert itiTime_2 == runItisSanity[runs.thisN][nTrainTrialsPerRun + test_trials.thisN], \
                str(itiTime_2) + " == runItisSanity[" + str(runs.thisN) + "][" + str(nTrainTrialsPerRun) + " + " + str(test_trials.thisN) + "] = " + runItisSanity[runs.thisN][nTrainTrialsPerRun + test_trials.thisN]
            assert itiTime_2 >= itiMin
            assert itiTime_2 <= itiMax
    CodeComponent streamingData_2
      End Routine:
        flushEntries()
    CodeComponent addExtraDataCodeLAST_2
      Begin Routine:
        thisExp.addData('trialOrTest', 'test')

        # MUST BE LAST -> b/c we change e.g. the cueId above
        #
        addExtraData()
    StaticComponent ITI_2
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      startVal [time (s)] = 6
    KeyboardComponent responseKey_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 6
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = 'left','right', '1', '2'
      startVal [time (s)] = 0
      store = first key
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    TextComponent trialInstrText_2
      wrapWidth = 20
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = 6.0
      pos = [0, 0.8]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 0.075
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    TextComponent restaurantText_2
      color = pink
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      stopVal [duration (s)] = 6
      pos = [0, +0.35]
      startEstim = 0
      startVal [time (s)] = 0
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg_2
      stopVal [duration (s)] = 6.0
      pos = [0, 0.0]
      startEstim = 0
      startVal [time (s)] = 0
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    ImageComponent sickImg_2
      stopVal [duration (s)] = 6.0
      pos = [-0.5, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg_2
      stopVal [duration (s)] = 6
      pos = [+0.5, -0.6]
      startEstim = 0
      startVal [time (s)] = 0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent sickHighlight_2
      text = _
      stopVal [duration (s)] = 6
      pos = [-0.5, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1.0
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    TextComponent notsickHighlight_2
      text = _
      stopVal [duration (s)] = 6
      pos = [0.5, -0.35]
      startEstim = 0
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent fixationJitterText_2
      text = +
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      startVal [time (s)] = 6
      letterHeight = 0.1
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  Routine waitForTrigger
    CodeComponent waitForTriggerCode
      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner
        # definitely log it!

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan

            # settings for launchScan:
            MR_settings = {
                'TR': 2.5, # duration (sec) per volume
                'volumes': 141, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Begin Routine:
        if expInfo['mriMode'] != 'off': # or 'scan' !
            assert expInfo['mriMode'] == 'scan'

            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock, # <-- how you know the time!
                      mode=expInfo['mriMode']) # <-- mode passed in
            elif trigger == 'parallel':
                parallel.setPortAddress(0x378)
                pin = 10; wait_msg = "Waiting for scanner..."
                pinStatus = parallel.readPin(pin)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
                       break
                       # start exp when pin values change
                globalClock.reset()
                logging.defaultClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received
        else:
            fmriClock.reset()

        expInfo['triggerWallTime'] = time.ctime()
        core.wait(1)
      End Routine:
        routineTimer.reset()
  Routine test
  Routine end_run
    CodeComponent setEndRunInfo
      Begin Routine:
        endRunInfo.setText("End of round #" + str(runs.thisN + 1))
    TextComponent endRunInfo
      wrapWidth = 1.5
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        the text is set manually
  Routine waitForFinish
    CodeComponent finishCode
      Begin Experiment:
        EXP_DURATION = 352.5
      End Routine:
        logging.exp("Experiment Finished")
      End Experiment:
        #win.saveMovieFrames('thumb.png')
      Each Frame:
        if logging.defaultClock.getTime() > EXP_DURATION:
            continueRoutine = False
            finishText.status = FINISHED
            finishText.setAutoDraw(False)
    TextComponent finishText
      color = black
      text = Please wait for scanner to finish...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine test_warning
    TextComponent testTrialsHeadsUp
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Beginning test phase.

        You will not receive feedback on the following 4 trials.
  Routine Fixation_2
    TextComponent fixationCross_2
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.xlsx
    loopType = random
    nReps = 1
    Selected rows = range(1,10)
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    conditions:
      [{u'restaurantNames': u'Okay here\'s how this works. Each row is a different run -- a list of restaurant names + the prefix of the filenames of its corresponding foods. The list of restaurant names should be comma-separated and should contain exactly 3 restaurants (no unicode characters please -- stick to ASCII). For each food prefix, there should be 3 corresponding files in the \'foods\' directory in the format "[food prefix][cueId].png". For example, for the prefix "mexican_food", there should be files "mexican_food0.png", "mexican_food1.png" and "mexican_food2.png".  The third column is ran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,
      {u'restaurantNames': u"Molina's Cantina,Restaurante Arroyo,El Coyote Cafe", u'foodFilesPrefix': u'mexican_food', u'contextRole': u'irrelevant'},
      {u'restaurantNames': u'Le Parisien,Chez Toinette,Au Petit Sud Ouest', u'foodFilesPrefix': u'french_food', u'contextRole': u'modulatory'},
      {u'restaurantNames': u"Lau's Dim Sum Bar,Shanghai Dumpling King,Happy Lamb Hot Pot", u'foodFilesPrefix': u'chinese_food', u'contextRole': u'additive'}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
    Routine new_run
    Routine waitForTrigger
    Routine Fixation
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 5
      Selected rows = range(1,5)
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      Routine trial
    LoopTerminator trials
    Routine test_warning
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 1
      Selected rows = range(6,10)
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      Routine test_2
    LoopTerminator test_trials
    Routine Fixation_2
  LoopTerminator runs
  Routine waitForFinish
  Routine thankyou
